// Color-by-cluster morphology script
// Jenn Kim
// July 25, 2024
 
// FUNCTIONS

// find ROIs by name
// function adapted from:
// https://forum.image.sc/t/selecting-roi-based-on-name/3809 
function findRoiWithName(roi_ids, roiName) { 
 
	for (i=0; i<roi_ids.length; i++) { 
		//print("Match: " + roi_ids[i] + ";" + roiName);
		if (matches(roi_ids[i], roiName)) {
			return i; 
		} 
	}
	return 0; //fallback so does not break - is not perfect
} 

// Function to open the file
function openFile(filePath) {
    if (File.exists(filePath)) {
        open(filePath);
    } 
}

// Function to list files and search for matching filenames
function listFiles(dir, fileList, searchString) {
    found_filename = "not_found";
    for (i = 0; i < fileList.length; i++) {
        fileName = fileList[i];
        if (startsWith(fileName, searchString)){
            print(fileName);
            found_filename = fileName;
        }
    }
    return found_filename;
}


// MACRO STARTS HERE

//Welcome message
		Dialog.create("MicrogliaMorphology");
		Dialog.addMessage("Welcome to MicrogliaMorphology's ColorByCluster feature!");
		Dialog.addMessage("The complimentary ColorByCluster features within MicrogliaMorphology and MicrogliaMorphologyR allow you to color your microglia cells by their morphological cluster IDs.");
		Dialog.addMessage("This allows for visual verification of hypothesized cluster characterizations.");
		Dialog.addMessage("Please make sure to use the complimentary MicrogliaMorphologyR package to generate your ColorByCluster.csv file prior to this step.");
		Dialog.addMessage("If you have not done this yet, please do so first and come back to MicrogliaMorphology's ColorByCluster feature. If you are ready, continue on:");
		Dialog.show();

		Dialog.create("MicrogliaMorphology");
		Dialog.addMessage("If you want to batch process your images for ColorByCluster, please make sure that your original input images, thresholded images,"); 
		Dialog.addMessage("and ColorByCluster csv files all have the same starting string (see Github page for examples).");
		Dialog.show();
		

//use file browser to choose path and files to run plugin on

skipped_files = newArray();

// if batch mode = yes
	
	setOption("JFileChooser",true);
	
	// original input .tiff images
	ColorByCluster_originalimages_dir = getDirectory("Choose parent folder containing original .tiff images that you used as input for MicrogliaMorphology");
	ColorByCluster_originalimages = getFileList(ColorByCluster_originalimages_dir);
	ColorByCluster_originalimages = Array.sort(ColorByCluster_originalimages);
	ColorByCluster_originalimages_count = ColorByCluster_originalimages.length;
	
	// thresholded .tiff images
	ColorByCluster_thresholdedimages_dir = getDirectory("Pick parent folder containing thresholded .tiff images that were generated by MicrogliaMorphology from your original input images.");
	ColorByCluster_thresholdedimages = getFileList(ColorByCluster_thresholdedimages_dir);
	ColorByCluster_thresholdedimages = Array.sort(ColorByCluster_thresholdedimages);
	ColorByCluster_thresholdedimages_count = ColorByCluster_thresholdedimages.length;
	
	// ColorByCluster .csv files
	ColorByCluster_clusters_dir = getDirectory("Select the .csv files generated from MicrogliaMorphologyR which contain the cluster labels for the final microglia cells from your images.");
	ColorByCluster_clusters = getFileList(ColorByCluster_clusters_dir);
	ColorByCluster_clusters = Array.sort(ColorByCluster_clusters);
	ColorByCluster_clusters_count = ColorByCluster_clusters.length;
	
	// Directory to save final ColorByCluster images to 
	ColorByCluster_output = getDirectory("Where do you want to save your final ColorByCluster images?");
	
	// customize colors for up to 10 cluster labels
	Dialog.create("MicrogliaMorphology");
	Dialog.addMessage("If your images have multiple channels, which channel would you like to use for colouring?");
	Dialog.addNumber("If it has only one channel, leave at 1.", 1, 0, 3, "");
	Dialog.addMessage("In the sections below, specify what colors you want your morphological clusters to be in the image.");
	Dialog.addMessage("You can format your color choices as HEX code (e.g., BBCC33)");
	Dialog.addMessage("or any of the following colors: black, white, cyan, magenta, yellow, red, green, blue, and orange");
	Dialog.addString("Cluster 1:", "BBCC33");
	Dialog.addString("Cluster 2:", "44BB99");
	Dialog.addString("Cluster 3:", "EEDD88");
	Dialog.addString("Cluster 4:", "EE8866");
	Dialog.addString("Cluster 5:", "red");
	Dialog.addString("Cluster 6:", "green");
	Dialog.addString("Cluster 7:", "blue");
	Dialog.addString("Cluster 8:", "yellow");
	Dialog.addString("Cluster 9:", "orange");
	Dialog.addString("Cluster 10:", "cyan");
	Dialog.show();	
	
	colour_channel = Dialog.getNumber();
	Cluster1 = Dialog.getString();
	Cluster2 = Dialog.getString();
	Cluster3 = Dialog.getString();
	Cluster4 = Dialog.getString();
	Cluster5 = Dialog.getString();
	Cluster6 = Dialog.getString();
	Cluster7 = Dialog.getString();
	Cluster8 = Dialog.getString();
	Cluster9 = Dialog.getString();
	Cluster10 = Dialog.getString();
	
cluster_colors = newArray(Cluster1, Cluster2, Cluster3, Cluster4, Cluster5, Cluster6, Cluster7, Cluster8, Cluster9, Cluster10);
	
	run("Text Window...", "name=[Progress] width=60 height=10");
	setLocation(10, 10);
	// loop through original images
	for(i=0; i<ColorByCluster_originalimages_count; i++){
		// extract out common string to search for across folders from original .tiff files
		ColorByCluster_originalimage = ColorByCluster_originalimages[i];
		print(ColorByCluster_originalimage);
		StringToSearchFor = File.getNameWithoutExtension(ColorByCluster_originalimages_dir + ColorByCluster_originalimage); 
		// loop through ColorByCluster csv files folder, find the file with matching string, open, and print file name
		cluster_file = listFiles(ColorByCluster_clusters_dir, ColorByCluster_clusters, StringToSearchFor);
		// loop through thresholded folder, find the file with matching string, open, and print file name
		threshold_file = listFiles(ColorByCluster_thresholdedimages_dir, ColorByCluster_thresholdedimages, StringToSearchFor);
		
		// only do analysis if both the image and the csv file exist
		//could expand to also check for the thresholded image (if extension is known from previous step - I am not sure if it is a good idea to generalize that yet
		if (File.exists(ColorByCluster_originalimages_dir + ColorByCluster_originalimage) && File.exists(ColorByCluster_clusters_dir + cluster_file) && File.exists(ColorByCluster_thresholdedimages_dir + threshold_file)) {
			openFile(ColorByCluster_thresholdedimages_dir + threshold_file);
			
			openFile(ColorByCluster_clusters_dir + cluster_file);
			selectWindow(cluster_file);
			remove_regions = false;
			if (Table.getString("Region", 1) == "full_brain") {
				remove_regions = true;
			}
			selectWindow(threshold_file);
			if (remove_regions) {
				Overlay.remove;
				run("Select None");
			}
			
			//if there is not yet an overlay, make one
			if (Overlay.size < 1) {
				Overlay.remove;
				has_selection = selectionType();
				//either of the current selection or the entire brain if there is no current selection
				if (has_selection == -1) {
					run("Select All");
					setSelectionName("full_brain");
					Overlay.addSelection;
					run("Select None");
				} else {
					Overlay.addSelection;
					run("Select None");
				}
			}
			//retrieve how many regions we have to go through
			region_number = Overlay.size;
			
			open(ColorByCluster_originalimages_dir + ColorByCluster_originalimage);
			getDimensions(width, height, channels, slices, frames);
			Overlay.remove;
			//only leave one channel
			for (channel_number = channels; channel_number > 0; channel_number--) {
				Stack.setChannel(i);
				if (channel_number != colour_channel) {
					run("Delete Slice", "delete=channel");
				}
			}
			
			for (current_region = 0; current_region < region_number; current_region++) {
				
				
				selectWindow(threshold_file);
		   		run("Select None");
				run("Duplicate...", "title=region");
				run("To ROI Manager");
				//Overlay.remove;//do not have to do this if the overlay just stays like this the entire time
			
				roiManager("select", current_region);
				region_name = Roi.getName;
				setBackgroundColor(0,0,0);
				run("Clear Outside");
				print("Working on region: " + region_name);
		   		run("Select None");
		   		roiManager("reset");
				selectWindow("region");
		   		run("Select None");
				run("Analyze Particles...", "pixel add");
				//to give name information
				run("Set Measurements...", "display redirect=None decimal=9");
				roiManager("measure");
				roi_names = Table.getColumn("Label");
				roi_ids = newArray(roi_names.length);
				close("Results");
				// if the labels have the region name attached to it, remove that
				for (label = 0; label < roi_names.length; label++) {
					full_label = roi_names[label];
					colon_index = indexOf(full_label, ":");
					if (colon_index >= 0) {
						roi_ids[label] = substring(full_label, colon_index + 1);
					} else {
						roi_ids[label] = full_label;
					}
				}
				
				
				//close(threshold_file);
				close("region");
				// open original .tiff file
				
				roiManager("Show All without labels");
				
				roiManager("Set Color", "black");
				selectWindow(cluster_file);
				nrow = Table.size();
				
				
				// ColorByCluster
				for(n=0; n<nrow; n++) {
					selectWindow(cluster_file);
					region_in_table = Table.getString("Region", n);
					if (region_in_table == region_name) {
						cluster = Table.getString("Cluster",n);
						cluster = parseInt(cluster);
						print("cluster: " + cluster);
						if (cluster > 0 && cluster < 11) {
							label2 = Table.getString("ID",n);
							print("[Progress]", "\\Update:Analyzing image " + (i + 1) + "/" + ColorByCluster_originalimages_count + ": " + ColorByCluster_originalimage + "\nRegion " + (current_region + 1) + "/" + region_number + ": " + region_name + "\ncell: " + (n + 1) + "/" + nrow);
						
							roi_idx = findRoiWithName(roi_ids, label2);
							print("roi id: " + roi_idx);
							
							//setColor(cluster_colors[cluster-1]);
							selectWindow(ColorByCluster_originalimage);
							roiManager("select", roi_idx);
							Roi.setFillColor(cluster_colors[cluster - 1]);
							roiManager("update");
						}	
					}
				}
				
				//run("Flatten");
				
				selectWindow(ColorByCluster_originalimage);
				run("From ROI Manager");
				close("ROI Manager");
			}
			selectWindow(ColorByCluster_originalimage);
			// save into ColorByCluster images
			run("Flatten");
			flattened_image = getTitle();
			selectWindow(threshold_file);
			run("To ROI Manager");
			selectWindow(flattened_image);
			roiManager("show all");
			saveAs("Tiff", ColorByCluster_output + ColorByCluster_originalimage + "_ColorByCluster.tif");
			// close everything
			close(ColorByCluster_originalimage + "_ColorByCluster.tif");
			close(cluster_file);
			close(ColorByCluster_originalimage);
			close(threshold_file);
			close("ROI Manager");
		} else {
			skipped_files = Array.concat(skipped_files , ColorByCluster_originalimages[i]);
		}
	}
	print("done!");
	if (skipped_files.length > 0) {
		print("The following file(s) do(es) not have associated thresholds or csv files and was/were skipped: ");
		Array.print(skipped_files);
	}


